PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Use version = 2024.2.4
  Window size (pixels) = [1418, 798]
  expName = soloprojectstroop
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = 0.7255, 0.7255, 0.7255
      lineColor = 0.7255, 0.7255, 0.7255
      shape = cross
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent stim1
      font [set every repeat] = Arial
      letterHeight [set every repeat] = Size1
      pos [set every repeat] = (-288, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $Number1
      units = pix
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    TextComponent stim2
      font [set every repeat] = Arial
      letterHeight [set every repeat] = Size2
      pos [set every repeat] = (288, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $Number2
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right', 'escape'
      correctAns = $Correct_Response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solostroopfinal - Sheet1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Condition', 1), ('Number1', 1), ('Size1', 20), ('Number2', 3), ('Size2', 50), ('Congruence', 'congruent'), ('Correct_Response', 'left')]),
      OrderedDict([('Condition', 1), ('Number1', 2), ('Size1', 20), ('Number2', 4), ('Size2', 50), ('Congruence', 'congruent'), ('Correct_Response', 'left')]),
      OrderedDict([('Condition', 1), ('Number1', 3), ('Size1', 20), ('Number2', 5), ('Size2', 50), ('Congruence', 'incongruent'), ('Correct_Response', 'right')]),
      OrderedDict([('Condition', 1), ('Number1', 8), ('Size1', 50), ('Number2', 1), ('Size2', 20), ('Congruence', 'congruent'), ('Correct_Response', 'left')]),
      OrderedDict([('Condition', 1), ('Number1', 9), ('Size1', 50), ('Number2', 2), ('Size2', 20), ('Congruence', 'congruent'), ('Correct_Response', 'left')]),
      OrderedDict([('Condition', 2), ('Number1', 1), ('Size1', 50), ('Number2', 7), ('Size2', 20), ('Congruence', 'incongruent'), ('Correct_Response', 'right')]),
      OrderedDict([('Condition', 2), ('Number1', 2), ('Size1', 50), ('Number2', 8), ('Size2', 20), ('Congruence', 'incongruent'), ('Correct_Response', 'right')]),
      OrderedDict([('Condition', 2), ('Number1', 3), ('Size1', 50), ('Number2', 9), ('Size2', 20), ('Congruence', 'incongruent'), ('Correct_Response', 'right')]),
      OrderedDict([('Condition', 2), ('Number1', 7), ('Size1', 20), ('Number2', 4), ('Size2', 50), ('Congruence', 'congruent'), ('Correct_Response', 'left')])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
    Routine trial
  LoopTerminator trials
